begintemplate dopaminergic
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend, axon
public all, somatic, axonal, basal

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  position(1000, 1000, 1000)
  synapses()
}

create soma, dend[16], axon

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[2](1)
  connect dend[5](0), soma(0.5)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), soma(0.5)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  connect dend[12](0), dend[8](1)
  connect dend[13](0), soma(0.5)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect axon(0), soma(0.5)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-7.21896, 0, 0, 14.4379)
	pt3dadd(0, 0, 0, 14.4379)
	pt3dadd(7.21896, 0, 0, 14.4379)
  }
  dend {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(12.7, -2.83, -1.47, 0.25)
	pt3dadd(13.09, -2.8, -1.47, 0.25)
	pt3dadd(13.47, -2.73, -1.47, 0.25)
	pt3dadd(13.87, -2.67, -1.47, 0.25)
	pt3dadd(14.25, -2.6, -1.47, 0.25)
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  }
}
proc shape3d_2() {
  dend[1] {	pt3dadd(79.93, 0.73, 10.27, 0.25)
	pt3dadd(80.31, 0.79, 10.27, 0.25)
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  }
}
proc shape3d_3() {
  dend[1] {	pt3dadd(143.32, -3.56, 19.64, 0.25)
	pt3dadd(143.55, -3.74, 19.64, 0.25)
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  }
}
proc shape3d_4() {
  dend[1] {	pt3dadd(194.99, -26.87, 24.35, 0.25)
	pt3dadd(195.04, -27.27, 24.35, 0.25)
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  }
}
proc shape3d_5() {
  dend[1] {	pt3dadd(240.1, -58.48, 22, 0.25)
	pt3dadd(240.16, -58.86, 22, 0.25)
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  }
}
proc shape3d_6() {
  dend[2] {	pt3dadd(62.83, 37.78, 10.27, 0.25)
	pt3dadd(63, 38.01, 10.27, 0.25)
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  }
}
proc shape3d_7() {
  dend[2] {	pt3dadd(85.23, 90.1, 12.6, 0.25)
	pt3dadd(85.4, 90.33, 12.6, 0.25)
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  }
}
proc shape3d_8() {
  dend[2] {	pt3dadd(98.68, 149.48, 14.97, 0.25)
	pt3dadd(98.63, 149.85, 14.97, 0.25)
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  }
}
proc shape3d_9() {
  dend[2] {	pt3dadd(94.51, 207.08, 17.29, 0.25)
	pt3dadd(94.46, 207.48, 17.29, 0.25)
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  }
}
proc shape3d_10() {
  dend[2] {	pt3dadd(86.6, 269.9, 26.7, 0.25)
	pt3dadd(86.77, 270.12, 26.7, 0.25)
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  }
}
proc shape3d_11() {
  dend[4] {	pt3dadd(83.6, 297.48, 26.7, 0.25)
	pt3dadd(83.53, 297.87, 26.7, 0.25)
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  }
}
proc shape3d_12() {
  dend[4] {	pt3dadd(70.1, 365.85, 24.35, 0.25)
	pt3dadd(70.05, 366.24, 24.35, 0.25)
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  }
}
proc shape3d_13() {
  dend[4] {	pt3dadd(58.06, 429.68, 22, 0.25)
	pt3dadd(57.85, 429.84, 22, 0.25)
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  }
}
proc shape3d_14() {
  dend[4] {	pt3dadd(61.08, 489.91, 7.92, 0.25)
	pt3dadd(61.23, 490.12, 7.92, 0.25)
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  }
}
proc shape3d_15() {
  dend[5] {	pt3dadd(-11.62, 10.1, 0.87, 0.25)
	pt3dadd(-11.66, 10.49, 0.87, 0.25)
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  }
}
proc shape3d_16() {
  dend[5] {	pt3dadd(-40.7, 64.09, 0.87, 0.25)
	pt3dadd(-40.76, 64.49, 0.87, 0.25)
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  }
}
proc shape3d_17() {
  dend[5] {	pt3dadd(-83.92, 99.15, 3.23, 0.25)
	pt3dadd(-84.15, 99.32, 3.23, 0.25)
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  }
}
proc shape3d_18() {
  dend[5] {	pt3dadd(-121.87, 140.34, 5.57, 0.25)
	pt3dadd(-121.94, 140.74, 5.57, 0.25)
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  }
}
proc shape3d_19() {
  dend[6] {	pt3dadd(-153.97, 188.94, 14.97, 0.25)
	pt3dadd(-154.19, 189.1, 14.97, 0.25)
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  }
}
proc shape3d_20() {
  dend[7] {	pt3dadd(-151.84, 190.83, 12.6, 0.25)
	pt3dadd(-151.91, 191.23, 12.6, 0.25)
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  }
}
proc shape3d_21() {
  dend[9] {	pt3dadd(-42.44, -36.25, 7.92, 0.25)
	pt3dadd(-42.83, -36.33, 7.92, 0.25)
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  }
}
proc shape3d_22() {
  dend[12] {	pt3dadd(-31.1, -30.85, 0.87, 0.25)
	pt3dadd(-31.27, -31.08, 0.87, 0.25)
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  }
}
proc shape3d_23() {
  dend[15] {	pt3dadd(-19.05, -22.15, -3.79, 0.25)
	pt3dadd(-19.44, -22.2, -6.15, 0.25)
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  }
}
proc shape3d_24() {
  axon {	pt3dadd(-30.95, 57.17, 19.64, 0.25)
	pt3dadd(-31.35, 57.1, 19.64, 0.25)
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  }
}
proc shape3d_25() {
  axon {	pt3dadd(-72.07, 92.74, 33.74, 0.25)
	pt3dadd(-72.23, 92.52, 33.74, 0.25)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 15 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 15 dend[i] basal.append()

}
proc geom() {
  forsec all {  }
}

func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
// above was too inaccurate with large variation in 3d diameter
// so now we use all 3-d points to get a better approximate lambda
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}


proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ri = 45
    cm = 1
  }
  soma{ 
   insert nattxs
   gbar_nattxs = 0.5

   insert nattxr
   gbar_nattxr = 0.008

   insert kdr
   gkdrbar_kdr = 0.2

   insert cachan
   gcalbar_cachan = 0.8e-02
   gcatbar_cachan = 1e-03
   gcanbar_cachan = 1.71e-04
   
   insert cad
   taur_cad = 15
   insert capump
   icapumpmax_capump  = 0.15

   insert pump
   ipumpmax_pump = 0.092

   insert hd
   ghdbar_hd = 0.02


   insert nadyn
   insert kdyn 

   insert kca 
   gkcabar_kca = 1e-03

   }

   for i=0,15 dend[i]{ 
   insert nattxs
   gbar_nattxs = 0.5

   insert nattxr
   gbar_nattxr = 0.008

   insert kdr
   gkdrbar_kdr = 0.2

   insert cachan
   gcalbar_cachan = 0.8e-02
   gcatbar_cachan = 1e-03
   gcanbar_cachan = 1.71e-04
   
   insert cad
   taur_cad = 15
   insert capump
   icapumpmax_capump  = 0.15

   insert pump
   ipumpmax_pump = 0.092

   insert hd
   ghdbar_hd = 0.02


   insert nadyn
   insert kdyn 

   insert kca 
   gkcabar_kca = 1e-03

   }

   axon{
   insert nattxs
   gbar_nattxs = 0.5

   insert nattxr
   gbar_nattxr = 0.008

   insert kdr
   gkdrbar_kdr = 0.2

   insert cachan
   gcalbar_cachan = 0.8e-02
   gcatbar_cachan = 1e-03
   gcanbar_cachan = 1.71e-04
   
   insert cad
   taur_cad = 15
   insert capump
   icapumpmax_capump  = 0.15

   insert pump
   ipumpmax_pump = 0.092

   insert hd
   ghdbar_hd = 0.02


   insert nadyn
   insert kdyn 

   insert kca 
   gkcabar_kca = 1e-03
   }
  }


proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate dopaminergic
